PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 3.2.4
  Window size (pixels) = [1920, 1080]
  expName = kirjaimet20a
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Routines
  Routine trial
    MouseComponent mouse
      clickable = v03_oikea,v04,v05,v08,v09,v10,v13,v14,v15,v21,jatka
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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    ImageComponent v01
      disabled = True
      image = ijk.png
      pos [set every repeat] = $(px01,py01)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
      units = norm
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    ImageComponent v02
      disabled = True
      image = ijl.png
      pos [set every repeat] = $(px02,py02)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v03_oikea
      image = ikj.png
      pos [set every repeat] = $(px06,py06)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v04
      image = ikl.png
      pos [set every repeat] = $(px07,py07)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v05
      image = ilk.png
      pos [set every repeat] = $(px08,py08)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v06
      disabled = True
      image = jik.png
      pos [set every repeat] = $(px06,py06)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v07
      disabled = True
      image = jki.png
      pos [set every repeat] = $(px07,py07)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v08
      image = jkl.png
      pos [set every repeat] = $(px11,py11)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v09
      image = jli.png
      pos [set every repeat] = $(px12,py12)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v10
      image = jlk.png
      pos [set every repeat] = $(px13,py13)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v11
      disabled = True
      image = kij.png
      pos [set every repeat] = $(px11,py11)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v12
      disabled = True
      image = kil.png
      pos [set every repeat] = $(px12,py12)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v13
      image = kjl.png
      pos [set every repeat] = $(px16,py16)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v14
      image = kli.png
      pos [set every repeat] = $(px17,py17)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v15
      image = klj.png
      pos [set every repeat] = $(px18,py18)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v16
      disabled = True
      image = lij.png
      pos [set every repeat] = $(px16,py16)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v17
      disabled = True
      image = lik.png
      pos [set every repeat] = $(px17,py17)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v18
      disabled = True
      image = lji.png
      pos [set every repeat] = $(px18,py18)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v19
      disabled = True
      image = lki.png
      pos [set every repeat] = $(px19,py19)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v20
      disabled = True
      image = lkj.png
      pos [set every repeat] = $(px03,py03)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent v21
      image = ljk.png
      pos [set every repeat] = $(px21,py21)
      size [set every repeat] = $(pw,ph)
      startVal [time (s)] = 0.5
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    ImageComponent jatka
      image = jatka.png
      pos [set every repeat] = $(jatkax,jatkay)
      size [set every repeat] = $(jw,jh)
      startVal [time (s)] = 0.5
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  Routine clicktocontinue
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text:
           paina kirjainyhdistelmää
                           IKJ
           tai painiketta "seuraava",
        jos kirjainyhdistelmää ei löydy

         (paina näyttöä jatkaaksesi)
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.5
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  Routine instructions
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 1
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text:
           paina kirjainyhdistelmää
                           IKJ
           tai painiketta "seuraava",
        jos kirjainyhdistelmää ei löydy

         (paina näyttöä aloittaaksesi)
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = img_pos.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('px01', -0.66), ('py01', 0.6), ('px02', None), ('py02', None), ('px03', None), ('py03', None), ('px04', None), ('py04', None), ('px05', None), ('py05', None), ('px06', None), ('py06', None), ('px07', None), ('py07', None), ('px08', None), ('py08', None), ('px09', None), ('py09', None), ('px10', None), ('py10', None), ('px11', None), ('py11', None), ('px12', None), ('py12', None), ('px13', None), ('py13', None), ('px14', None), ('py14', None), ('px15', None), ('py15', None), ('px16', None), ('py16', None), ('px17', None), ('py17', None), ('px18', None), ('py18', None), ('px19', N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,
      OrderedDict([('px01', None), ('py01', None), ('px02', None), ('py02', None), ('px03', None), ('py03', None), ('px04', None), ('py04', None), ('px05', None), ('py05', None), ('px06', None), ('py06', None), ('px07', -0.7), ('py07', 0.6), ('px08', None), ('py08', None), ('px09', None), ('py09', None), ('px10', None), ('py10', None), ('px11', None), ('py11', None), ('px12', None), ('py12', None), ('px13', None), ('py13', None), ('px14', None), ('py14', None), ('px15', None), ('py15', None), ('px16', None), ('py16', None), ('px17', None), ('py17', None), ('px18', None), ('py18', None), ('px19', Non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,
      OrderedDict([('px01', None), ('py01', None), ('px02', None), ('py02', None), ('px03', None), ('py03', None), ('px04', None), ('py04', None), ('px05', None), ('py05', None), ('px06', None), ('py06', None), ('px07', None), ('py07', None), ('px08', None), ('py08', None), ('px09', None), ('py09', None), ('px10', None), ('py10', None), ('px11', None), ('py11', None), ('px12', None), ('py12', None), ('px13', None), ('py13', None), ('px14', -0.62), ('py14', 0.57), ('px15', None), ('py15', None), ('px16', None), ('py16', None), ('px17', None), ('py17', None), ('px18', None), ('py18', None), ('px19', N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,
      OrderedDict([('px01', None), ('py01', None), ('px02', None), ('py02', None), ('px03', None), ('py03', None), ('px04', None), ('py04', None), ('px05', None), ('py05', None), ('px06', None), ('py06', None), ('px07', None), ('py07', None), ('px08', None), ('py08', None), ('px09', None), ('py09', None), ('px10', None), ('py10', None), ('px11', None), ('py11', None), ('px12', None), ('py12', None), ('px13', None), ('py13', None), ('px14', -0.66), ('py14', 0.6), ('px15', None), ('py15', None), ('px16', None), ('py16', None), ('px17', None), ('py17', None), ('px18', None), ('py18', None), ('px19', No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
    Routine trial
    Routine clicktocontinue
  LoopTerminator trials
